---
API: 2
OpenSesame: 3.1.2
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set round_decimals 2
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Volumes/MuGL_GRANT/1_Adaptation"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set canvas_backend xpyriment
set bidi no
set background black

define sketchpad BREAK_block
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Excellent work!<br />Take a short break, and press the space bar to continue." x=0 y=0 z_index=0

define loop Baseline_production
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 80
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Stimulus blush
	setcycle 0 PhoWord "b.l.V.S"
	setcycle 0 Olen 5
	setcycle 0 Plen 4
	setcycle 0 Freq 2.6667
	setcycle 0 OTAN 6
	setcycle 0 PTAN 7
	setcycle 0 Type Control_1
	setcycle 0 Type2 Control
	setcycle 0 Type3 Control
	setcycle 0 Audio blush
	setcycle 0 Variant Control
	setcycle 0 Block Baseline
	setcycle 1 Stimulus boat
	setcycle 1 PhoWord "b.oU.t"
	setcycle 1 Olen 4
	setcycle 1 Plen 3
	setcycle 1 Freq 95.7843
	setcycle 1 OTAN 16
	setcycle 1 PTAN 37
	setcycle 1 Type Control_1
	setcycle 1 Type2 Control
	setcycle 1 Type3 Control
	setcycle 1 Audio boat
	setcycle 1 Variant Control
	setcycle 1 Block Baseline
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	setcycle 9 Stimulus growth
	setcycle 9 PhoWord "g.r0.oU.T"
	setcycle 9 Olen 6
	setcycle 9 Plen 4
	setcycle 9 Freq 6.451
	setcycle 9 OTAN 0
	setcycle 9 PTAN 7
	setcycle 9 Type Control_1
	setcycle 9 Type2 Control
	setcycle 9 Type3 Control
	setcycle 9 Audio growth
	setcycle 9 Variant Control
	setcycle 9 Block Baseline
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	setcycle 12 Stimulus oath
	setcycle 12 PhoWord "oU.T"
	setcycle 12 Olen 4
	setcycle 12 Plen 2
	setcycle 12 Freq 9.8824
	setcycle 12 OTAN 7
	setcycle 12 PTAN 15
	setcycle 12 Type Control_1
	setcycle 12 Type2 Control
	setcycle 12 Type3 Control
	setcycle 12 Audio oath
	setcycle 12 Variant Control
	setcycle 12 Block Baseline
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	setcycle 15 Stimulus put
	setcycle 15 PhoWord "p.U.t"
	setcycle 15 Olen 3
	setcycle 15 Plen 3
	setcycle 15 Freq 828.451
	setcycle 15 OTAN 21
	setcycle 15 PTAN 18
	setcycle 15 Type Control_1
	setcycle 15 Type2 Control
	setcycle 15 Type3 Control
	setcycle 15 Audio put
	setcycle 15 Variant Control
	setcycle 15 Block Baseline
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	setcycle 20 Stimulus chalk
	setcycle 20 PhoWord "tS.O.k"
	setcycle 20 Olen 5
	setcycle 20 Plen 3
	setcycle 20 Freq 3.5882
	setcycle 20 OTAN 0
	setcycle 20 PTAN 10
	setcycle 20 Type Control_2
	setcycle 20 Type2 Control
	setcycle 20 Type3 Control
	setcycle 20 Audio chalk
	setcycle 20 Variant Control
	setcycle 20 Block Baseline
	setcycle 21 Stimulus chop
	setcycle 21 PhoWord "tS.A.p"
	setcycle 21 Olen 4
	setcycle 21 Plen 3
	setcycle 21 Freq 13.6078
	setcycle 21 OTAN 12
	setcycle 21 PTAN 17
	setcycle 21 Type Control_2
	setcycle 21 Type2 Control
	setcycle 21 Type3 Control
	setcycle 21 Audio chop
	setcycle 21 Variant Control
	setcycle 21 Block Baseline
	setcycle 22 Stimulus chops
	setcycle 22 PhoWord "tS.A.p.s"
	setcycle 22 Olen 5
	setcycle 22 Plen 4
	setcycle 22 Freq 5.4314
	setcycle 22 OTAN 7
	setcycle 22 PTAN 12
	setcycle 22 Type Control_2
	setcycle 22 Type2 Control
	setcycle 22 Type3 Control
	setcycle 22 Audio chops
	setcycle 22 Variant Control
	setcycle 22 Block Baseline
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	setcycle 40 Stimulus chicks
	setcycle 40 PhoWord "tS.I.k.s"
	setcycle 40 Olen 6
	setcycle 40 Plen 4
	setcycle 40 Freq 14.549
	setcycle 40 OTAN 5
	setcycle 40 PTAN 19
	setcycle 40 Type Target_Dis
	setcycle 40 Type2 Target_Dis
	setcycle 40 Type3 Target
	setcycle 40 Audio chicks
	setcycle 40 Variant Traditional
	setcycle 40 Block Baseline
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	setcycle 49 Stimulus picnic
	setcycle 49 PhoWord "p.I.k.n.I.k"
	setcycle 49 Olen 6
	setcycle 49 Plen 6
	setcycle 49 Freq 11.6863
	setcycle 49 OTAN 1
	setcycle 49 PTAN 1
	setcycle 49 Type Target_Dis
	setcycle 49 Type2 Target_Dis
	setcycle 49 Type3 Target
	setcycle 49 Audio picnic
	setcycle 49 Variant Traditional
	setcycle 49 Block Baseline
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	setcycle 53 Stimulus slipped
	setcycle 53 PhoWord "s.l.I.p.t"
	setcycle 53 Olen 7
	setcycle 53 Plen 5
	setcycle 53 Freq 16.6275
	setcycle 53 OTAN 6
	setcycle 53 PTAN 9
	setcycle 53 Type Target_Dis
	setcycle 53 Type2 Target_Dis
	setcycle 53 Type3 Target
	setcycle 53 Audio slipped
	setcycle 53 Variant Traditional
	setcycle 53 Block Baseline
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	setcycle 60 Stimulus acquit
	setcycle 60 PhoWord "5.k.w.I.t"
	setcycle 60 Olen 6
	setcycle 60 Plen 5
	setcycle 60 Freq 0.47059
	setcycle 60 OTAN 0
	setcycle 60 PTAN 2
	setcycle 60 Type Target_Fav
	setcycle 60 Type2 Target_Fav
	setcycle 60 Type3 Target
	setcycle 60 Audio acquit
	setcycle 60 Variant Traditional
	setcycle 60 Block Baseline
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	run Production_seq

define form_text_input Comp_check
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title "Comprehension Check"
	set form_question "Which word did you just hear?"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define sketchpad Conclusion
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Congratulations! You've completed this portion of the experiment.<br /><br />Please let the experimenter know." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to log responses and exit the program." x=0 y=288 z_index=0

define form_consent Consent_Form
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "<span size=24>Consent form</span>"
	__form_text__
	You are about to participate in an experiment. This experiment poses no known risks to your health and your name will not be associated with the findings. You can stop at any time during experiment if you feel uncomfortable.
	
	Please read the document handed to you by the experimenter; you may take this document with you at the conclusion of the study should you wish.If you have any questions, please do not hesitate to ask the experimenter or the PI (Grant M. Berry; grantberry@psu.edu).
	
	To participate in this study, you should have no known uncorrected visual or auditory difficulty, and should not have any known cognitive impairment.
	If you wear glasses or a hearing aid, please wear them during the experiment.
	__end__
	set decline_text "Do not participate"
	set decline_message "Thank you for your time. Please let the experimenter know of your decision."
	set cols "2;2"
	set checkbox_text "I have read and understood the information shown above and in the corresponding consent document"
	set accept_text "Participate!"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 2 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


define inline_script Fav_Grouper
	set description "Executes Python code"
	___run__
	Set1=[]
	Set2=[]
	Set3=[]
	Set4=[]
	Words2=list(Words)
	for i in range(0,20):
		z=19-i
		name=Words.pop(z)
		temp="Fav%d" % (i)
		temp2="dic_"+temp
		d=dictionary[name]
		exp.set(temp,name)
		exp.set(temp2,d)
		if i<5:
			Set1+=[name]
		elif i>4 and i<10:
			Set2+=[name]
		elif i>9 and i<15:
			Set3+=[name]
		else:
			Set4+=[name]
	global Set1
	global Set2
	global Set3
	global Set4
	global Words2
	__end__
	___prepare__
	#This script will take the 20 targets in favorable contexts and create four randomized groups of five.
	#In the second listening block, words in the first group will be replaced with the stimulus with the novel phone
	#This will be done recursively, up until block 5 (where 100% will have the novel phone)
	import random
	Words=['acquit','admit','commit','dish','fit','glitch','hiss','hitch','kiss','kit','pitch','quit','skit','split','squish','stitch','swiss','wish','witch','zit']
	d=[['acquit','acquet'],['admit','admet'], ['commit','commet'],['dish','desh'],['fit','fet'],['glitch','gletch'],['hiss','hess'],['hitch','hetch'],['kiss','kess'],['kit','ket'],['pitch','petch'],['quit','kwet'],['skit','sket'],['split','splet'],['squish','skwesh'],['stitch','stetch'],['swiss','swess'],['wish','wesh'],['witch','wetch'],['zit','zet']]
	dictionary=dict(d)
	random.shuffle(Words)
	global Words
	global dictionary
	__end__

define inline_script Fav_Set
	set description "Executes Python code"
	set _run ""
	___prepare__
	
	exp.set()
	__end__

define inline_script Fave_SetAudio
	set description "Executes Python code"
	___run__
	global dictionary
	global Words2
	global Set1
	global Set2
	global Set3
	global Set4
	print("Stimulus is %s" %var.Stimulus)
	print("Set1 is %s" % Set1)
	if var.Block=='Listening2':
		if var.Stimulus in Set1:
			print("%s is in Set 1" % var.Stimulus)
			var_aud=dictionary[var.Stimulus]
			var.Set=var_aud
			var.varvar='Novel'
			print("Playing %s" % var.Set)
		else:
			#var_aud=var.Stimulus
			var.Set=var.Stimulus
			var.varvar='Traditional'
	elif var.Block=='Listening3':
		Set12=Set1+Set2
		if var.Stimulus in Set12:
			var_aud=dictionary[var.Stimulus]
			var.Set=var_aud
			var.varvar='Novel'
		else:
			var_aud=var.Stimulus
			var.Set=var_aud
			var.varvar='Traditional'
	
	elif var.Block=='Listening4':
		Set123=Set1+Set2+Set3
		if var.Stimulus in Set123:
			print("%s is NOVEL" % var.Stimulus)
			var_aud=dictionary[var.Stimulus]
			var.Audio=var_aud
			var.Set=var_aud
			var.varvar='Novel'
			print("Playing %s" % var.Set)
		else:
			var_aud=var.Stimulus
			var.Set=var_aud
			var.varvar='Traditional'
	
	elif var.Block=='Listening5':
		Set1234=Set1+Set2+Set3+Set4
		if var.Stimulus in Set1234:
			var_aud=dictionary[var.Stimulus]
			var.Set=var_aud
			var.varvar='Novel'
		else:
			var_aud=var.Stimulus
			var.Set=var_aud
			var.varvar='Traditional'
	__end__
	set _prepare ""

define sketchpad ISI
	set duration 1000
	set description "Displays stimuli"

define sketchpad Intro_listening
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="In this block, you will hear someone saying a series of words aloud.<br /><br />Pay attention to each word,<br />as sometimes you'll need to type what you heard." x=-32 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press the space bar to begin." x=0 y=288 z_index=0

define sketchpad Intro_production
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You will see a list of words.<br />Please read each word aloud.<br />After you read the word aloud, press the space bar.<br /><br />Please wait until you have finished saying the word to press the space bar,<br />or your recording will be clipped." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press the space bar to begin." x=0 y=320 z_index=0

define form_multiple_choice LHQ
	set timeout infinite
	set spacing 10
	set question "Are you comfortable speaking in another language?"
	__options__
	Yes
	No
	Maybe
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Language Experience"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_text_input LHQ_2
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title LHQ_2
	__form_question__
	If you do speak another language, please list it here. If not, leave this blank.
	Then, press Enter.
	__end__
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define loop Listening_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 80
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Stimulus blush
	setcycle 0 Type Control_1
	setcycle 0 Type2 Control
	setcycle 0 Type3 Control
	setcycle 0 Audio blush
	setcycle 0 Variant Control
	setcycle 0 Block Listening1
	setcycle 1 Stimulus boat
	setcycle 1 Type Control_1
	setcycle 1 Type2 Control
	setcycle 1 Type3 Control
	setcycle 1 Audio boat
	setcycle 1 Variant Control
	setcycle 1 Block Listening1
	setcycle 2 Stimulus brush
	setcycle 2 Type Control_1
	setcycle 2 Type2 Control
	setcycle 2 Type3 Control
	setcycle 2 Audio brush
	setcycle 2 Variant Control
	setcycle 2 Block Listening1
	setcycle 3 Stimulus bush
	setcycle 3 Type Control_1
	setcycle 3 Type2 Control
	setcycle 3 Type3 Control
	setcycle 3 Audio bush
	setcycle 3 Variant Control
	setcycle 3 Block Listening1
	setcycle 4 Stimulus crush
	setcycle 4 Type Control_1
	setcycle 4 Type2 Control
	setcycle 4 Type3 Control
	setcycle 4 Audio crush
	setcycle 4 Variant Control
	setcycle 4 Block Listening1
	setcycle 5 Stimulus cuss
	setcycle 5 Type Control_1
	setcycle 5 Type2 Control
	setcycle 5 Type3 Control
	setcycle 5 Audio cuss
	setcycle 5 Variant Control
	setcycle 5 Block Listening1
	setcycle 6 Stimulus flush
	setcycle 6 Type Control_1
	setcycle 6 Type2 Control
	setcycle 6 Type3 Control
	setcycle 6 Audio flush
	setcycle 6 Variant Control
	setcycle 6 Block Listening1
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	setcycle 20 Stimulus chalk
	setcycle 20 Type Control_2
	setcycle 20 Type2 Control
	setcycle 20 Type3 Control
	setcycle 20 Audio chalk
	setcycle 20 Variant Control
	setcycle 20 Block Listening1
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	setcycle 40 Stimulus chicks
	setcycle 40 Type Target_Dis
	setcycle 40 Type2 Target_Dis
	setcycle 40 Type3 Target
	setcycle 40 Audio chicks
	setcycle 40 Variant Traditional
	setcycle 40 Block Listening1
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	setcycle 60 Stimulus acquit
	setcycle 60 Type Target_Fav
	setcycle 60 Type2 Target_Fav
	setcycle 60 Type3 Target
	setcycle 60 Audio acquit
	setcycle 60 Variant Traditional
	setcycle 60 Block Listening1
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	run Listening_seq

define loop Listening_2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 80
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Stimulus blush
	setcycle 0 Type Control_1
	setcycle 0 Type2 Control
	setcycle 0 Type3 Control
	setcycle 0 Audio blush
	setcycle 0 Variant Control
	setcycle 0 Block Listening2
	setcycle 0 Set NA
	setcycle 1 Stimulus boat
	setcycle 1 Type Control_1
	setcycle 1 Type2 Control
	setcycle 1 Type3 Control
	setcycle 1 Audio boat
	setcycle 1 Variant Control
	setcycle 1 Block Listening2
	setcycle 1 Set NA
	setcycle 2 Stimulus brush
	setcycle 2 Type Control_1
	setcycle 2 Type2 Control
	setcycle 2 Type3 Control
	setcycle 2 Audio brush
	setcycle 2 Variant Control
	setcycle 2 Block Listening2
	setcycle 2 Set NA
	setcycle 3 Stimulus bush
	setcycle 3 Type Control_1
	setcycle 3 Type2 Control
	setcycle 3 Type3 Control
	setcycle 3 Audio bush
	setcycle 3 Variant Control
	setcycle 3 Block Listening2
	setcycle 3 Set NA
	setcycle 4 Stimulus crush
	setcycle 4 Type Control_1
	setcycle 4 Type2 Control
	setcycle 4 Type3 Control
	setcycle 4 Audio crush
	setcycle 4 Variant Control
	setcycle 4 Block Listening2
	setcycle 4 Set NA
	setcycle 5 Stimulus cuss
	setcycle 5 Type Control_1
	setcycle 5 Type2 Control
	setcycle 5 Type3 Control
	setcycle 5 Audio cuss
	setcycle 5 Variant Control
	setcycle 5 Block Listening2
	setcycle 5 Set NA
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	setcycle 20 Stimulus chalk
	setcycle 20 Type Control_2
	setcycle 20 Type2 Control
	setcycle 20 Type3 Control
	setcycle 20 Audio chalk
	setcycle 20 Variant Control
	setcycle 20 Block Listening2
	setcycle 20 Set NA
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	setcycle 40 Stimulus chicks
	setcycle 40 Type Target_Dis
	setcycle 40 Type2 Target_Dis
	setcycle 40 Type3 Target
	setcycle 40 Audio chicks
	setcycle 40 Variant Traditional
	setcycle 40 Block Listening2
	setcycle 40 Set NA
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	setcycle 60 Stimulus "[Fav0]"
	setcycle 60 Type Target_Fav
	setcycle 60 Type2 Target_Fav
	setcycle 60 Type3 Target
	setcycle 60 Audio "[dic_Fav0]"
	setcycle 60 Variant Novel
	setcycle 60 Block Listening2
	setcycle 60 Set Set1
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	setcycle 65 Stimulus "[Fav5]"
	setcycle 65 Type Target_Fav
	setcycle 65 Type2 Target_Fav
	setcycle 65 Type3 Target
	setcycle 65 Audio "[Fav5]"
	setcycle 65 Variant Traditional
	setcycle 65 Block Listening2
	setcycle 65 Set Set2
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	setcycle 70 Stimulus "[Fav10]"
	setcycle 70 Type Target_Fav
	setcycle 70 Type2 Target_Fav
	setcycle 70 Type3 Target
	setcycle 70 Audio "[Fav10]"
	setcycle 70 Variant Traditional
	setcycle 70 Block Listening2
	setcycle 70 Set Set3
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	setcycle 75 Stimulus "[Fav15]"
	setcycle 75 Type Target_Fav
	setcycle 75 Type2 Target_Fav
	setcycle 75 Type3 Target
	setcycle 75 Audio "[Fav15]"
	setcycle 75 Variant Traditional
	setcycle 75 Block Listening2
	setcycle 75 Set Set4
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	run Listening_seq

define loop Listening_3
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 80
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Stimulus blush
	setcycle 0 Type Control_1
	setcycle 0 Type2 Control
	setcycle 0 Type3 Control
	setcycle 0 Audio blush
	setcycle 0 Variant Control
	setcycle 0 Block Listening3
	setcycle 0 Set NA
	setcycle 1 Stimulus boat
	setcycle 1 Type Control_1
	setcycle 1 Type2 Control
	setcycle 1 Type3 Control
	setcycle 1 Audio boat
	setcycle 1 Variant Control
	setcycle 1 Block Listening3
	setcycle 1 Set NA
	setcycle 2 Stimulus brush
	setcycle 2 Type Control_1
	setcycle 2 Type2 Control
	setcycle 2 Type3 Control
	setcycle 2 Audio brush
	setcycle 2 Variant Control
	setcycle 2 Block Listening3
	setcycle 2 Set NA
	setcycle 3 Stimulus bush
	setcycle 3 Type Control_1
	setcycle 3 Type2 Control
	setcycle 3 Type3 Control
	setcycle 3 Audio bush
	setcycle 3 Variant Control
	setcycle 3 Block Listening3
	setcycle 3 Set NA
	setcycle 4 Stimulus crush
	setcycle 4 Type Control_1
	setcycle 4 Type2 Control
	setcycle 4 Type3 Control
	setcycle 4 Audio crush
	setcycle 4 Variant Control
	setcycle 4 Block Listening3
	setcycle 4 Set NA
	setcycle 5 Stimulus cuss
	setcycle 5 Type Control_1
	setcycle 5 Type2 Control
	setcycle 5 Type3 Control
	setcycle 5 Audio cuss
	setcycle 5 Variant Control
	setcycle 5 Block Listening3
	setcycle 5 Set NA
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	setcycle 20 Stimulus chalk
	setcycle 20 Type Control_2
	setcycle 20 Type2 Control
	setcycle 20 Type3 Control
	setcycle 20 Audio chalk
	setcycle 20 Variant Control
	setcycle 20 Block Listening3
	setcycle 20 Set NA
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	setcycle 40 Stimulus chicks
	setcycle 40 Type Target_Dis
	setcycle 40 Type2 Target_Dis
	setcycle 40 Type3 Target
	setcycle 40 Audio chicks
	setcycle 40 Variant Traditional
	setcycle 40 Block Listening3
	setcycle 40 Set NA
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	setcycle 60 Stimulus "[Fav0]"
	setcycle 60 Type Target_Fav
	setcycle 60 Type2 Target_Fav
	setcycle 60 Type3 Target
	setcycle 60 Audio "[dic_Fav0]"
	setcycle 60 Variant Novel
	setcycle 60 Block Listening3
	setcycle 60 Set Set1
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	setcycle 65 Stimulus "[Fav5]"
	setcycle 65 Type Target_Fav
	setcycle 65 Type2 Target_Fav
	setcycle 65 Type3 Target
	setcycle 65 Audio "[dic_Fav5]"
	setcycle 65 Variant Novel
	setcycle 65 Block Listening3
	setcycle 65 Set Set2
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	setcycle 70 Stimulus "[Fav10]"
	setcycle 70 Type Target_Fav
	setcycle 70 Type2 Target_Fav
	setcycle 70 Type3 Target
	setcycle 70 Audio "[Fav10]"
	setcycle 70 Variant Traditional
	setcycle 70 Block Listening3
	setcycle 70 Set Set3
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	setcycle 75 Stimulus "[Fav15]"
	setcycle 75 Type Target_Fav
	setcycle 75 Type2 Target_Fav
	setcycle 75 Type3 Target
	setcycle 75 Audio "[Fav15]"
	setcycle 75 Variant Traditional
	setcycle 75 Block Listening3
	setcycle 75 Set Set4
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	run Listening_seq

define loop Listening_4
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 80
	set continuous no
	set break_if_on_first yes
	set break_if never
	set Audio "[]"
	setcycle 0 Stimulus blush
	setcycle 0 Type Control_1
	setcycle 0 Type2 Control
	setcycle 0 Type3 Control
	setcycle 0 Audio blush
	setcycle 0 Variant Control
	setcycle 0 Block Listening4
	setcycle 0 Set NA
	setcycle 1 Stimulus boat
	setcycle 1 Type Control_1
	setcycle 1 Type2 Control
	setcycle 1 Type3 Control
	setcycle 1 Audio boat
	setcycle 1 Variant Control
	setcycle 1 Block Listening4
	setcycle 1 Set NA
	setcycle 2 Stimulus brush
	setcycle 2 Type Control_1
	setcycle 2 Type2 Control
	setcycle 2 Type3 Control
	setcycle 2 Audio brush
	setcycle 2 Variant Control
	setcycle 2 Block Listening4
	setcycle 2 Set NA
	setcycle 3 Stimulus bush
	setcycle 3 Type Control_1
	setcycle 3 Type2 Control
	setcycle 3 Type3 Control
	setcycle 3 Audio bush
	setcycle 3 Variant Control
	setcycle 3 Block Listening4
	setcycle 3 Set NA
	setcycle 4 Stimulus crush
	setcycle 4 Type Control_1
	setcycle 4 Type2 Control
	setcycle 4 Type3 Control
	setcycle 4 Audio crush
	setcycle 4 Variant Control
	setcycle 4 Block Listening4
	setcycle 4 Set NA
	setcycle 5 Stimulus cuss
	setcycle 5 Type Control_1
	setcycle 5 Type2 Control
	setcycle 5 Type3 Control
	setcycle 5 Audio cuss
	setcycle 5 Variant Control
	setcycle 5 Block Listening4
	setcycle 5 Set NA
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	setcycle 20 Stimulus chalk
	setcycle 20 Type Control_2
	setcycle 20 Type2 Control
	setcycle 20 Type3 Control
	setcycle 20 Audio chalk
	setcycle 20 Variant Control
	setcycle 20 Block Listening4
	setcycle 20 Set NA
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	setcycle 40 Stimulus chicks
	setcycle 40 Type Target_Dis
	setcycle 40 Type2 Target_Dis
	setcycle 40 Type3 Target
	setcycle 40 Audio chicks
	setcycle 40 Variant Traditional
	setcycle 40 Block Listening4
	setcycle 40 Set NA
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	setcycle 60 Stimulus "[Fav0]"
	setcycle 60 Type Target_Fav
	setcycle 60 Type2 Target_Fav
	setcycle 60 Type3 Target
	setcycle 60 Audio "[dic_Fav0]"
	setcycle 60 Variant Novel
	setcycle 60 Block Listening4
	setcycle 60 Set Set1
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	setcycle 65 Stimulus "[Fav5]"
	setcycle 65 Type Target_Fav
	setcycle 65 Type2 Target_Fav
	setcycle 65 Type3 Target
	setcycle 65 Audio "[dic_Fav5]"
	setcycle 65 Variant Novel
	setcycle 65 Block Listening4
	setcycle 65 Set Set2
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	setcycle 70 Stimulus "[Fav10]"
	setcycle 70 Type Target_Fav
	setcycle 70 Type2 Target_Fav
	setcycle 70 Type3 Target
	setcycle 70 Audio "[dic_Fav10]"
	setcycle 70 Variant Novel
	setcycle 70 Block Listening4
	setcycle 70 Set Set3
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	setcycle 75 Stimulus "[Fav15]"
	setcycle 75 Type Target_Fav
	setcycle 75 Type2 Target_Fav
	setcycle 75 Type3 Target
	setcycle 75 Audio "[Fav15]"
	setcycle 75 Variant Traditional
	setcycle 75 Block Listening4
	setcycle 75 Set Set4
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	run Listening_seq

define loop Listening_5
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 80
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Stimulus blush
	setcycle 0 Type Control_1
	setcycle 0 Type2 Control
	setcycle 0 Type3 Control
	setcycle 0 Audio blush
	setcycle 0 Variant Control
	setcycle 0 Block Listening5
	setcycle 0 Set NA
	setcycle 1 Stimulus boat
	setcycle 1 Type Control_1
	setcycle 1 Type2 Control
	setcycle 1 Type3 Control
	setcycle 1 Audio boat
	setcycle 1 Variant Control
	setcycle 1 Block Listening5
	setcycle 1 Set NA
	setcycle 2 Stimulus brush
	setcycle 2 Type Control_1
	setcycle 2 Type2 Control
	setcycle 2 Type3 Control
	setcycle 2 Audio brush
	setcycle 2 Variant Control
	setcycle 2 Block Listening5
	setcycle 2 Set NA
	setcycle 3 Stimulus bush
	setcycle 3 Type Control_1
	setcycle 3 Type2 Control
	setcycle 3 Type3 Control
	setcycle 3 Audio bush
	setcycle 3 Variant Control
	setcycle 3 Block Listening5
	setcycle 3 Set NA
	setcycle 4 Stimulus crush
	setcycle 4 Type Control_1
	setcycle 4 Type2 Control
	setcycle 4 Type3 Control
	setcycle 4 Audio crush
	setcycle 4 Variant Control
	setcycle 4 Block Listening5
	setcycle 4 Set NA
	setcycle 5 Stimulus cuss
	setcycle 5 Type Control_1
	setcycle 5 Type2 Control
	setcycle 5 Type3 Control
	setcycle 5 Audio cuss
	setcycle 5 Variant Control
	setcycle 5 Block Listening5
	setcycle 5 Set NA
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	setcycle 20 Stimulus chalk
	setcycle 20 Type Control_2
	setcycle 20 Type2 Control
	setcycle 20 Type3 Control
	setcycle 20 Audio chalk
	setcycle 20 Variant Control
	setcycle 20 Block Listening5
	setcycle 20 Set NA
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	setcycle 40 Stimulus chicks
	setcycle 40 Type Target_Dis
	setcycle 40 Type2 Target_Dis
	setcycle 40 Type3 Target
	setcycle 40 Audio chicks
	setcycle 40 Variant Traditional
	setcycle 40 Block Listening5
	setcycle 40 Set NA
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	setcycle 60 Stimulus "[Fav0]"
	setcycle 60 Type Target_Fav
	setcycle 60 Type2 Target_Fav
	setcycle 60 Type3 Target
	setcycle 60 Audio "[dic_Fav0]"
	setcycle 60 Variant Novel
	setcycle 60 Block Listening5
	setcycle 60 Set Set1
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	setcycle 65 Stimulus "[Fav5]"
	setcycle 65 Type Target_Fav
	setcycle 65 Type2 Target_Fav
	setcycle 65 Type3 Target
	setcycle 65 Audio "[dic_Fav5]"
	setcycle 65 Variant Novel
	setcycle 65 Block Listening5
	setcycle 65 Set Set2
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	setcycle 70 Stimulus "[Fav10]"
	setcycle 70 Type Target_Fav
	setcycle 70 Type2 Target_Fav
	setcycle 70 Type3 Target
	setcycle 70 Audio "[dic_Fav10]"
	setcycle 70 Variant Novel
	setcycle 70 Block Listening5
	setcycle 70 Set Set3
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	setcycle 75 Stimulus "[Fav15]"
	setcycle 75 Type Target_Fav
	setcycle 75 Type2 Target_Fav
	setcycle 75 Type3 Target
	setcycle 75 Audio "[dic_Fav15]"
	setcycle 75 Variant Novel
	setcycle 75 Block Listening5
	setcycle 75 Set Set4
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	run Listening_seq

define sequence Listening_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_dot always
	run stim_listening always
	run stim_audio always
	run Comp_check "[count_stim_audio] %10 = 9"
	run ISI always
	run logger always

define loop Looper
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 81
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Stimulus blush
	setcycle 0 Listen2 "[listen2]"
	setcycle 0 Listen3 "[listen3]"
	setcycle 0 Listen4 "[listen4]"
	setcycle 0 Listen5 "[listen5]"
	setcycle 1 Stimulus boat
	setcycle 1 Listen2 "[listen2]"
	setcycle 1 Listen3 "[listen3]"
	setcycle 1 Listen4 "[listen4]"
	setcycle 1 Listen5 "[listen5]"
	setcycle 2 Stimulus brush
	setcycle 2 Listen2 "[listen2]"
	setcycle 2 Listen3 "[listen3]"
	setcycle 2 Listen4 "[listen4]"
	setcycle 2 Listen5 "[listen5]"
	setcycle 3 Stimulus bush
	setcycle 3 Listen2 "[listen2]"
	setcycle 3 Listen3 "[listen3]"
	setcycle 3 Listen4 "[listen4]"
	setcycle 3 Listen5 "[listen5]"
	setcycle 4 Stimulus crush
	setcycle 4 Listen2 "[listen2]"
	setcycle 4 Listen3 "[listen3]"
	setcycle 4 Listen4 "[listen4]"
	setcycle 4 Listen5 "[listen5]"
	setcycle 5 Stimulus cuss
	setcycle 5 Listen2 "[listen2]"
	setcycle 5 Listen3 "[listen3]"
	setcycle 5 Listen4 "[listen4]"
	setcycle 5 Listen5 "[listen5]"
	setcycle 6 Stimulus flush
	setcycle 6 Listen2 "[listen2]"
	setcycle 6 Listen3 "[listen3]"
	setcycle 6 Listen4 "[listen4]"
	setcycle 6 Listen5 "[listen5]"
	setcycle 7 Stimulus fuss
	setcycle 7 Listen2 "[listen2]"
	setcycle 7 Listen3 "[listen3]"
	setcycle 7 Listen4 "[listen4]"
	setcycle 7 Listen5 "[listen5]"
	setcycle 8 Stimulus gloat
	setcycle 8 Listen2 "[listen2]"
	setcycle 8 Listen3 "[listen3]"
	setcycle 8 Listen4 "[listen4]"
	setcycle 8 Listen5 "[listen5]"
	setcycle 9 Stimulus growth
	setcycle 9 Listen2 "[listen2]"
	setcycle 9 Listen3 "[listen3]"
	setcycle 9 Listen4 "[listen4]"
	setcycle 9 Listen5 "[listen5]"
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	setcycle 80 Stimulus ""
	setcycle 80 Listen2 ""
	setcycle 80 Listen3 ""
	setcycle 80 Listen4 ""
	setcycle 80 Listen5 ""
	run New_SET

define inline_script New_SET
	set description "Executes Python code"
	___run__
	global dictionary
	global Words2
	global Set1
	global Set2
	global Set3
	global Set4
	
	if var.Stimulus in Set1:
		y2=dictionary[var.Stimulus]
		y3=dictionary[var.Stimulus]
		y4=dictionary[var.Stimulus]
		y5=dictionary[var.Stimulus]
		var.listen2=y2
		var.listen3=y3
		var.listen4=y4
		var.listen5=y5
	if var.Stimulus in Set3:
		y2=var.Stimulus
		y3=dictionary[var.Stimulus]
		y4=dictionary[var.Stimulus]
		y5=dictionary[var.Stimulus]
		var.listen2=y2
		var.listen3=y3
		var.listen4=y4
		var.listen5=y5
	if var.Stimulus in Set4:
		y2=var.Stimulus
		y3=var.Stimulus
		y4=dictionary[var.Stimulus]
		y5=dictionary[var.Stimulus]
		var.listen2=y2
		var.listen3=y3
		var.listen4=y4
		var.listen5=y5
	if var.Stimulus in Set5:
		y2=var.Stimulus
		y3=var.Stimulus
		y4=var.Stimulus
		y5=dictionary[var.Stimulus]
		var.listen2=y2
		var.listen3=y3
		var.listen4=y4
		var.listen5=y5
	print(var.Stimulus)
	print("%s" % var.listen4)
	__end__
	set _prepare ""

define loop Production_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 80
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Stimulus blush
	setcycle 0 PhoWord "b.l.V.S"
	setcycle 0 Olen 5
	setcycle 0 Plen 4
	setcycle 0 Freq 2.6667
	setcycle 0 OTAN 6
	setcycle 0 PTAN 7
	setcycle 0 Type Control_1
	setcycle 0 Type2 Control
	setcycle 0 Type3 Control
	setcycle 0 Audio blush
	setcycle 0 Variant Control
	setcycle 0 Block Production1
	setcycle 1 Stimulus boat
	setcycle 1 PhoWord "b.oU.t"
	setcycle 1 Olen 4
	setcycle 1 Plen 3
	setcycle 1 Freq 95.7843
	setcycle 1 OTAN 16
	setcycle 1 PTAN 37
	setcycle 1 Type Control_1
	setcycle 1 Type2 Control
	setcycle 1 Type3 Control
	setcycle 1 Audio boat
	setcycle 1 Variant Control
	setcycle 1 Block Production1
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	setcycle 9 Stimulus growth
	setcycle 9 PhoWord "g.r0.oU.T"
	setcycle 9 Olen 6
	setcycle 9 Plen 4
	setcycle 9 Freq 6.451
	setcycle 9 OTAN 0
	setcycle 9 PTAN 7
	setcycle 9 Type Control_1
	setcycle 9 Type2 Control
	setcycle 9 Type3 Control
	setcycle 9 Audio growth
	setcycle 9 Variant Control
	setcycle 9 Block Production1
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	setcycle 12 Stimulus oath
	setcycle 12 PhoWord "oU.T"
	setcycle 12 Olen 4
	setcycle 12 Plen 2
	setcycle 12 Freq 9.8824
	setcycle 12 OTAN 7
	setcycle 12 PTAN 15
	setcycle 12 Type Control_1
	setcycle 12 Type2 Control
	setcycle 12 Type3 Control
	setcycle 12 Audio oath
	setcycle 12 Variant Control
	setcycle 12 Block Production1
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	setcycle 15 Stimulus put
	setcycle 15 PhoWord "p.U.t"
	setcycle 15 Olen 3
	setcycle 15 Plen 3
	setcycle 15 Freq 828.451
	setcycle 15 OTAN 21
	setcycle 15 PTAN 18
	setcycle 15 Type Control_1
	setcycle 15 Type2 Control
	setcycle 15 Type3 Control
	setcycle 15 Audio put
	setcycle 15 Variant Control
	setcycle 15 Block Production1
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	setcycle 20 Stimulus chalk
	setcycle 20 PhoWord "tS.O.k"
	setcycle 20 Olen 5
	setcycle 20 Plen 3
	setcycle 20 Freq 3.5882
	setcycle 20 OTAN 0
	setcycle 20 PTAN 10
	setcycle 20 Type Control_2
	setcycle 20 Type2 Control
	setcycle 20 Type3 Control
	setcycle 20 Audio chalk
	setcycle 20 Variant Control
	setcycle 20 Block Production1
	setcycle 21 Stimulus chop
	setcycle 21 PhoWord "tS.A.p"
	setcycle 21 Olen 4
	setcycle 21 Plen 3
	setcycle 21 Freq 13.6078
	setcycle 21 OTAN 12
	setcycle 21 PTAN 17
	setcycle 21 Type Control_2
	setcycle 21 Type2 Control
	setcycle 21 Type3 Control
	setcycle 21 Audio chop
	setcycle 21 Variant Control
	setcycle 21 Block Production1
	setcycle 22 Stimulus chops
	setcycle 22 PhoWord "tS.A.p.s"
	setcycle 22 Olen 5
	setcycle 22 Plen 4
	setcycle 22 Freq 5.4314
	setcycle 22 OTAN 7
	setcycle 22 PTAN 12
	setcycle 22 Type Control_2
	setcycle 22 Type2 Control
	setcycle 22 Type3 Control
	setcycle 22 Audio chops
	setcycle 22 Variant Control
	setcycle 22 Block Production1
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	setcycle 40 Stimulus chicks
	setcycle 40 PhoWord "tS.I.k.s"
	setcycle 40 Olen 6
	setcycle 40 Plen 4
	setcycle 40 Freq 14.549
	setcycle 40 OTAN 5
	setcycle 40 PTAN 19
	setcycle 40 Type Target_Dis
	setcycle 40 Type2 Target_Dis
	setcycle 40 Type3 Target
	setcycle 40 Audio chicks
	setcycle 40 Variant Traditional
	setcycle 40 Block Production1
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	setcycle 49 Stimulus picnic
	setcycle 49 PhoWord "p.I.k.n.I.k"
	setcycle 49 Olen 6
	setcycle 49 Plen 6
	setcycle 49 Freq 11.6863
	setcycle 49 OTAN 1
	setcycle 49 PTAN 1
	setcycle 49 Type Target_Dis
	setcycle 49 Type2 Target_Dis
	setcycle 49 Type3 Target
	setcycle 49 Audio picnic
	setcycle 49 Variant Traditional
	setcycle 49 Block Production1
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	setcycle 53 Stimulus slipped
	setcycle 53 PhoWord "s.l.I.p.t"
	setcycle 53 Olen 7
	setcycle 53 Plen 5
	setcycle 53 Freq 16.6275
	setcycle 53 OTAN 6
	setcycle 53 PTAN 9
	setcycle 53 Type Target_Dis
	setcycle 53 Type2 Target_Dis
	setcycle 53 Type3 Target
	setcycle 53 Audio slipped
	setcycle 53 Variant Traditional
	setcycle 53 Block Production1
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	setcycle 60 Stimulus acquit
	setcycle 60 PhoWord "5.k.w.I.t"
	setcycle 60 Olen 6
	setcycle 60 Plen 5
	setcycle 60 Freq 0.47059
	setcycle 60 OTAN 0
	setcycle 60 PTAN 2
	setcycle 60 Type Target_Fav
	setcycle 60 Type2 Target_Fav
	setcycle 60 Type3 Target
	setcycle 60 Audio acquit
	setcycle 60 Variant Traditional
	setcycle 60 Block Production1
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	run Production_seq

define loop Production_2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 80
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Stimulus blush
	setcycle 0 PhoWord "b.l.V.S"
	setcycle 0 Olen 5
	setcycle 0 Plen 4
	setcycle 0 Freq 2.6667
	setcycle 0 OTAN 6
	setcycle 0 PTAN 7
	setcycle 0 Type Control_1
	setcycle 0 Type2 Control
	setcycle 0 Type3 Control
	setcycle 0 Audio blush
	setcycle 0 Variant Control
	setcycle 0 Block Production2
	setcycle 1 Stimulus boat
	setcycle 1 PhoWord "b.oU.t"
	setcycle 1 Olen 4
	setcycle 1 Plen 3
	setcycle 1 Freq 95.7843
	setcycle 1 OTAN 16
	setcycle 1 PTAN 37
	setcycle 1 Type Control_1
	setcycle 1 Type2 Control
	setcycle 1 Type3 Control
	setcycle 1 Audio boat
	setcycle 1 Variant Control
	setcycle 1 Block Production2
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	setcycle 9 Stimulus growth
	setcycle 9 PhoWord "g.r0.oU.T"
	setcycle 9 Olen 6
	setcycle 9 Plen 4
	setcycle 9 Freq 6.451
	setcycle 9 OTAN 0
	setcycle 9 PTAN 7
	setcycle 9 Type Control_1
	setcycle 9 Type2 Control
	setcycle 9 Type3 Control
	setcycle 9 Audio growth
	setcycle 9 Variant Control
	setcycle 9 Block Production2
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	setcycle 12 Stimulus oath
	setcycle 12 PhoWord "oU.T"
	setcycle 12 Olen 4
	setcycle 12 Plen 2
	setcycle 12 Freq 9.8824
	setcycle 12 OTAN 7
	setcycle 12 PTAN 15
	setcycle 12 Type Control_1
	setcycle 12 Type2 Control
	setcycle 12 Type3 Control
	setcycle 12 Audio oath
	setcycle 12 Variant Control
	setcycle 12 Block Production2
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	setcycle 15 Stimulus put
	setcycle 15 PhoWord "p.U.t"
	setcycle 15 Olen 3
	setcycle 15 Plen 3
	setcycle 15 Freq 828.451
	setcycle 15 OTAN 21
	setcycle 15 PTAN 18
	setcycle 15 Type Control_1
	setcycle 15 Type2 Control
	setcycle 15 Type3 Control
	setcycle 15 Audio put
	setcycle 15 Variant Control
	setcycle 15 Block Production2
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	setcycle 20 Stimulus chalk
	setcycle 20 PhoWord "tS.O.k"
	setcycle 20 Olen 5
	setcycle 20 Plen 3
	setcycle 20 Freq 3.5882
	setcycle 20 OTAN 0
	setcycle 20 PTAN 10
	setcycle 20 Type Control_2
	setcycle 20 Type2 Control
	setcycle 20 Type3 Control
	setcycle 20 Audio chalk
	setcycle 20 Variant Control
	setcycle 20 Block Production2
	setcycle 21 Stimulus chop
	setcycle 21 PhoWord "tS.A.p"
	setcycle 21 Olen 4
	setcycle 21 Plen 3
	setcycle 21 Freq 13.6078
	setcycle 21 OTAN 12
	setcycle 21 PTAN 17
	setcycle 21 Type Control_2
	setcycle 21 Type2 Control
	setcycle 21 Type3 Control
	setcycle 21 Audio chop
	setcycle 21 Variant Control
	setcycle 21 Block Production2
	setcycle 22 Stimulus chops
	setcycle 22 PhoWord "tS.A.p.s"
	setcycle 22 Olen 5
	setcycle 22 Plen 4
	setcycle 22 Freq 5.4314
	setcycle 22 OTAN 7
	setcycle 22 PTAN 12
	setcycle 22 Type Control_2
	setcycle 22 Type2 Control
	setcycle 22 Type3 Control
	setcycle 22 Audio chops
	setcycle 22 Variant Control
	setcycle 22 Block Production2
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	setcycle 40 Stimulus chicks
	setcycle 40 PhoWord "tS.I.k.s"
	setcycle 40 Olen 6
	setcycle 40 Plen 4
	setcycle 40 Freq 14.549
	setcycle 40 OTAN 5
	setcycle 40 PTAN 19
	setcycle 40 Type Target_Dis
	setcycle 40 Type2 Target_Dis
	setcycle 40 Type3 Target
	setcycle 40 Audio chicks
	setcycle 40 Variant Traditional
	setcycle 40 Block Production2
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	setcycle 49 Stimulus picnic
	setcycle 49 PhoWord "p.I.k.n.I.k"
	setcycle 49 Olen 6
	setcycle 49 Plen 6
	setcycle 49 Freq 11.6863
	setcycle 49 OTAN 1
	setcycle 49 PTAN 1
	setcycle 49 Type Target_Dis
	setcycle 49 Type2 Target_Dis
	setcycle 49 Type3 Target
	setcycle 49 Audio picnic
	setcycle 49 Variant Traditional
	setcycle 49 Block Production2
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	setcycle 53 Stimulus slipped
	setcycle 53 PhoWord "s.l.I.p.t"
	setcycle 53 Olen 7
	setcycle 53 Plen 5
	setcycle 53 Freq 16.6275
	setcycle 53 OTAN 6
	setcycle 53 PTAN 9
	setcycle 53 Type Target_Dis
	setcycle 53 Type2 Target_Dis
	setcycle 53 Type3 Target
	setcycle 53 Audio slipped
	setcycle 53 Variant Traditional
	setcycle 53 Block Production2
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	setcycle 60 Stimulus acquit
	setcycle 60 PhoWord "5.k.w.I.t"
	setcycle 60 Olen 6
	setcycle 60 Plen 5
	setcycle 60 Freq 0.47059
	setcycle 60 OTAN 0
	setcycle 60 PTAN 2
	setcycle 60 Type Target_Fav
	setcycle 60 Type2 Target_Fav
	setcycle 60 Type3 Target
	setcycle 60 Audio acquit
	setcycle 60 Variant Traditional
	setcycle 60 Block Production2
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	run Production_seq

define loop Production_3
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 80
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Stimulus blush
	setcycle 0 PhoWord "b.l.V.S"
	setcycle 0 Olen 5
	setcycle 0 Plen 4
	setcycle 0 Freq 2.6667
	setcycle 0 OTAN 6
	setcycle 0 PTAN 7
	setcycle 0 Type Control_1
	setcycle 0 Type2 Control
	setcycle 0 Type3 Control
	setcycle 0 Audio blush
	setcycle 0 Variant Control
	setcycle 0 Block Production3
	setcycle 1 Stimulus boat
	setcycle 1 PhoWord "b.oU.t"
	setcycle 1 Olen 4
	setcycle 1 Plen 3
	setcycle 1 Freq 95.7843
	setcycle 1 OTAN 16
	setcycle 1 PTAN 37
	setcycle 1 Type Control_1
	setcycle 1 Type2 Control
	setcycle 1 Type3 Control
	setcycle 1 Audio boat
	setcycle 1 Variant Control
	setcycle 1 Block Production3
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	setcycle 9 Stimulus growth
	setcycle 9 PhoWord "g.r0.oU.T"
	setcycle 9 Olen 6
	setcycle 9 Plen 4
	setcycle 9 Freq 6.451
	setcycle 9 OTAN 0
	setcycle 9 PTAN 7
	setcycle 9 Type Control_1
	setcycle 9 Type2 Control
	setcycle 9 Type3 Control
	setcycle 9 Audio growth
	setcycle 9 Variant Control
	setcycle 9 Block Production3
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	setcycle 12 Stimulus oath
	setcycle 12 PhoWord "oU.T"
	setcycle 12 Olen 4
	setcycle 12 Plen 2
	setcycle 12 Freq 9.8824
	setcycle 12 OTAN 7
	setcycle 12 PTAN 15
	setcycle 12 Type Control_1
	setcycle 12 Type2 Control
	setcycle 12 Type3 Control
	setcycle 12 Audio oath
	setcycle 12 Variant Control
	setcycle 12 Block Production3
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	setcycle 15 Stimulus put
	setcycle 15 PhoWord "p.U.t"
	setcycle 15 Olen 3
	setcycle 15 Plen 3
	setcycle 15 Freq 828.451
	setcycle 15 OTAN 21
	setcycle 15 PTAN 18
	setcycle 15 Type Control_1
	setcycle 15 Type2 Control
	setcycle 15 Type3 Control
	setcycle 15 Audio put
	setcycle 15 Variant Control
	setcycle 15 Block Production3
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	setcycle 20 Stimulus chalk
	setcycle 20 PhoWord "tS.O.k"
	setcycle 20 Olen 5
	setcycle 20 Plen 3
	setcycle 20 Freq 3.5882
	setcycle 20 OTAN 0
	setcycle 20 PTAN 10
	setcycle 20 Type Control_2
	setcycle 20 Type2 Control
	setcycle 20 Type3 Control
	setcycle 20 Audio chalk
	setcycle 20 Variant Control
	setcycle 20 Block Production3
	setcycle 21 Stimulus chop
	setcycle 21 PhoWord "tS.A.p"
	setcycle 21 Olen 4
	setcycle 21 Plen 3
	setcycle 21 Freq 13.6078
	setcycle 21 OTAN 12
	setcycle 21 PTAN 17
	setcycle 21 Type Control_2
	setcycle 21 Type2 Control
	setcycle 21 Type3 Control
	setcycle 21 Audio chop
	setcycle 21 Variant Control
	setcycle 21 Block Production3
	setcycle 22 Stimulus chops
	setcycle 22 PhoWord "tS.A.p.s"
	setcycle 22 Olen 5
	setcycle 22 Plen 4
	setcycle 22 Freq 5.4314
	setcycle 22 OTAN 7
	setcycle 22 PTAN 12
	setcycle 22 Type Control_2
	setcycle 22 Type2 Control
	setcycle 22 Type3 Control
	setcycle 22 Audio chops
	setcycle 22 Variant Control
	setcycle 22 Block Production3
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	setcycle 40 Stimulus chicks
	setcycle 40 PhoWord "tS.I.k.s"
	setcycle 40 Olen 6
	setcycle 40 Plen 4
	setcycle 40 Freq 14.549
	setcycle 40 OTAN 5
	setcycle 40 PTAN 19
	setcycle 40 Type Target_Dis
	setcycle 40 Type2 Target_Dis
	setcycle 40 Type3 Target
	setcycle 40 Audio chicks
	setcycle 40 Variant Traditional
	setcycle 40 Block Production3
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	setcycle 49 Stimulus picnic
	setcycle 49 PhoWord "p.I.k.n.I.k"
	setcycle 49 Olen 6
	setcycle 49 Plen 6
	setcycle 49 Freq 11.6863
	setcycle 49 OTAN 1
	setcycle 49 PTAN 1
	setcycle 49 Type Target_Dis
	setcycle 49 Type2 Target_Dis
	setcycle 49 Type3 Target
	setcycle 49 Audio picnic
	setcycle 49 Variant Traditional
	setcycle 49 Block Production3
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	setcycle 53 Stimulus slipped
	setcycle 53 PhoWord "s.l.I.p.t"
	setcycle 53 Olen 7
	setcycle 53 Plen 5
	setcycle 53 Freq 16.6275
	setcycle 53 OTAN 6
	setcycle 53 PTAN 9
	setcycle 53 Type Target_Dis
	setcycle 53 Type2 Target_Dis
	setcycle 53 Type3 Target
	setcycle 53 Audio slipped
	setcycle 53 Variant Traditional
	setcycle 53 Block Production3
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	setcycle 60 Stimulus acquit
	setcycle 60 PhoWord "5.k.w.I.t"
	setcycle 60 Olen 6
	setcycle 60 Plen 5
	setcycle 60 Freq 0.47059
	setcycle 60 OTAN 0
	setcycle 60 PTAN 2
	setcycle 60 Type Target_Fav
	setcycle 60 Type2 Target_Fav
	setcycle 60 Type3 Target
	setcycle 60 Audio acquit
	setcycle 60 Variant Traditional
	setcycle 60 Block Production3
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	run Production_seq

define loop Production_4
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 80
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Stimulus blush
	setcycle 0 PhoWord "b.l.V.S"
	setcycle 0 Olen 5
	setcycle 0 Plen 4
	setcycle 0 Freq 2.6667
	setcycle 0 OTAN 6
	setcycle 0 PTAN 7
	setcycle 0 Type Control_1
	setcycle 0 Type2 Control
	setcycle 0 Type3 Control
	setcycle 0 Audio blush
	setcycle 0 Variant Control
	setcycle 0 Block Production4
	setcycle 1 Stimulus boat
	setcycle 1 PhoWord "b.oU.t"
	setcycle 1 Olen 4
	setcycle 1 Plen 3
	setcycle 1 Freq 95.7843
	setcycle 1 OTAN 16
	setcycle 1 PTAN 37
	setcycle 1 Type Control_1
	setcycle 1 Type2 Control
	setcycle 1 Type3 Control
	setcycle 1 Audio boat
	setcycle 1 Variant Control
	setcycle 1 Block Production4
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	setcycle 9 Stimulus growth
	setcycle 9 PhoWord "g.r0.oU.T"
	setcycle 9 Olen 6
	setcycle 9 Plen 4
	setcycle 9 Freq 6.451
	setcycle 9 OTAN 0
	setcycle 9 PTAN 7
	setcycle 9 Type Control_1
	setcycle 9 Type2 Control
	setcycle 9 Type3 Control
	setcycle 9 Audio growth
	setcycle 9 Variant Control
	setcycle 9 Block Production4
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	setcycle 12 Stimulus oath
	setcycle 12 PhoWord "oU.T"
	setcycle 12 Olen 4
	setcycle 12 Plen 2
	setcycle 12 Freq 9.8824
	setcycle 12 OTAN 7
	setcycle 12 PTAN 15
	setcycle 12 Type Control_1
	setcycle 12 Type2 Control
	setcycle 12 Type3 Control
	setcycle 12 Audio oath
	setcycle 12 Variant Control
	setcycle 12 Block Production4
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	setcycle 15 Stimulus put
	setcycle 15 PhoWord "p.U.t"
	setcycle 15 Olen 3
	setcycle 15 Plen 3
	setcycle 15 Freq 828.451
	setcycle 15 OTAN 21
	setcycle 15 PTAN 18
	setcycle 15 Type Control_1
	setcycle 15 Type2 Control
	setcycle 15 Type3 Control
	setcycle 15 Audio put
	setcycle 15 Variant Control
	setcycle 15 Block Production4
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	setcycle 20 Stimulus chalk
	setcycle 20 PhoWord "tS.O.k"
	setcycle 20 Olen 5
	setcycle 20 Plen 3
	setcycle 20 Freq 3.5882
	setcycle 20 OTAN 0
	setcycle 20 PTAN 10
	setcycle 20 Type Control_2
	setcycle 20 Type2 Control
	setcycle 20 Type3 Control
	setcycle 20 Audio chalk
	setcycle 20 Variant Control
	setcycle 20 Block Production4
	setcycle 21 Stimulus chop
	setcycle 21 PhoWord "tS.A.p"
	setcycle 21 Olen 4
	setcycle 21 Plen 3
	setcycle 21 Freq 13.6078
	setcycle 21 OTAN 12
	setcycle 21 PTAN 17
	setcycle 21 Type Control_2
	setcycle 21 Type2 Control
	setcycle 21 Type3 Control
	setcycle 21 Audio chop
	setcycle 21 Variant Control
	setcycle 21 Block Production4
	setcycle 22 Stimulus chops
	setcycle 22 PhoWord "tS.A.p.s"
	setcycle 22 Olen 5
	setcycle 22 Plen 4
	setcycle 22 Freq 5.4314
	setcycle 22 OTAN 7
	setcycle 22 PTAN 12
	setcycle 22 Type Control_2
	setcycle 22 Type2 Control
	setcycle 22 Type3 Control
	setcycle 22 Audio chops
	setcycle 22 Variant Control
	setcycle 22 Block Production4
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	setcycle 40 Stimulus chicks
	setcycle 40 PhoWord "tS.I.k.s"
	setcycle 40 Olen 6
	setcycle 40 Plen 4
	setcycle 40 Freq 14.549
	setcycle 40 OTAN 5
	setcycle 40 PTAN 19
	setcycle 40 Type Target_Dis
	setcycle 40 Type2 Target_Dis
	setcycle 40 Type3 Target
	setcycle 40 Audio chicks
	setcycle 40 Variant Traditional
	setcycle 40 Block Production4
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	setcycle 49 Stimulus picnic
	setcycle 49 PhoWord "p.I.k.n.I.k"
	setcycle 49 Olen 6
	setcycle 49 Plen 6
	setcycle 49 Freq 11.6863
	setcycle 49 OTAN 1
	setcycle 49 PTAN 1
	setcycle 49 Type Target_Dis
	setcycle 49 Type2 Target_Dis
	setcycle 49 Type3 Target
	setcycle 49 Audio picnic
	setcycle 49 Variant Traditional
	setcycle 49 Block Production4
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	setcycle 53 Stimulus slipped
	setcycle 53 PhoWord "s.l.I.p.t"
	setcycle 53 Olen 7
	setcycle 53 Plen 5
	setcycle 53 Freq 16.6275
	setcycle 53 OTAN 6
	setcycle 53 PTAN 9
	setcycle 53 Type Target_Dis
	setcycle 53 Type2 Target_Dis
	setcycle 53 Type3 Target
	setcycle 53 Audio slipped
	setcycle 53 Variant Traditional
	setcycle 53 Block Production4
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	setcycle 60 Stimulus acquit
	setcycle 60 PhoWord "5.k.w.I.t"
	setcycle 60 Olen 6
	setcycle 60 Plen 5
	setcycle 60 Freq 0.47059
	setcycle 60 OTAN 0
	setcycle 60 PTAN 2
	setcycle 60 Type Target_Fav
	setcycle 60 Type2 Target_Fav
	setcycle 60 Type3 Target
	setcycle 60 Audio acquit
	setcycle 60 Variant Traditional
	setcycle 60 Block Production4
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	run Production_seq

define loop Production_5
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 80
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Stimulus blush
	setcycle 0 PhoWord "b.l.V.S"
	setcycle 0 Olen 5
	setcycle 0 Plen 4
	setcycle 0 Freq 2.6667
	setcycle 0 OTAN 6
	setcycle 0 PTAN 7
	setcycle 0 Type Control_1
	setcycle 0 Type2 Control
	setcycle 0 Type3 Control
	setcycle 0 Audio blush
	setcycle 0 Variant Control
	setcycle 0 Block Production5
	setcycle 1 Stimulus boat
	setcycle 1 PhoWord "b.oU.t"
	setcycle 1 Olen 4
	setcycle 1 Plen 3
	setcycle 1 Freq 95.7843
	setcycle 1 OTAN 16
	setcycle 1 PTAN 37
	setcycle 1 Type Control_1
	setcycle 1 Type2 Control
	setcycle 1 Type3 Control
	setcycle 1 Audio boat
	setcycle 1 Variant Control
	setcycle 1 Block Production5
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	setcycle 9 Stimulus growth
	setcycle 9 PhoWord "g.r0.oU.T"
	setcycle 9 Olen 6
	setcycle 9 Plen 4
	setcycle 9 Freq 6.451
	setcycle 9 OTAN 0
	setcycle 9 PTAN 7
	setcycle 9 Type Control_1
	setcycle 9 Type2 Control
	setcycle 9 Type3 Control
	setcycle 9 Audio growth
	setcycle 9 Variant Control
	setcycle 9 Block Production5
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	setcycle 12 Stimulus oath
	setcycle 12 PhoWord "oU.T"
	setcycle 12 Olen 4
	setcycle 12 Plen 2
	setcycle 12 Freq 9.8824
	setcycle 12 OTAN 7
	setcycle 12 PTAN 15
	setcycle 12 Type Control_1
	setcycle 12 Type2 Control
	setcycle 12 Type3 Control
	setcycle 12 Audio oath
	setcycle 12 Variant Control
	setcycle 12 Block Production5
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	setcycle 15 Stimulus put
	setcycle 15 PhoWord "p.U.t"
	setcycle 15 Olen 3
	setcycle 15 Plen 3
	setcycle 15 Freq 828.451
	setcycle 15 OTAN 21
	setcycle 15 PTAN 18
	setcycle 15 Type Control_1
	setcycle 15 Type2 Control
	setcycle 15 Type3 Control
	setcycle 15 Audio put
	setcycle 15 Variant Control
	setcycle 15 Block Production5
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	setcycle 20 Stimulus chalk
	setcycle 20 PhoWord "tS.O.k"
	setcycle 20 Olen 5
	setcycle 20 Plen 3
	setcycle 20 Freq 3.5882
	setcycle 20 OTAN 0
	setcycle 20 PTAN 10
	setcycle 20 Type Control_2
	setcycle 20 Type2 Control
	setcycle 20 Type3 Control
	setcycle 20 Audio chalk
	setcycle 20 Variant Control
	setcycle 20 Block Production5
	setcycle 21 Stimulus chop
	setcycle 21 PhoWord "tS.A.p"
	setcycle 21 Olen 4
	setcycle 21 Plen 3
	setcycle 21 Freq 13.6078
	setcycle 21 OTAN 12
	setcycle 21 PTAN 17
	setcycle 21 Type Control_2
	setcycle 21 Type2 Control
	setcycle 21 Type3 Control
	setcycle 21 Audio chop
	setcycle 21 Variant Control
	setcycle 21 Block Production5
	setcycle 22 Stimulus chops
	setcycle 22 PhoWord "tS.A.p.s"
	setcycle 22 Olen 5
	setcycle 22 Plen 4
	setcycle 22 Freq 5.4314
	setcycle 22 OTAN 7
	setcycle 22 PTAN 12
	setcycle 22 Type Control_2
	setcycle 22 Type2 Control
	setcycle 22 Type3 Control
	setcycle 22 Audio chops
	setcycle 22 Variant Control
	setcycle 22 Block Production5
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	setcycle 40 Stimulus chicks
	setcycle 40 PhoWord "tS.I.k.s"
	setcycle 40 Olen 6
	setcycle 40 Plen 4
	setcycle 40 Freq 14.549
	setcycle 40 OTAN 5
	setcycle 40 PTAN 19
	setcycle 40 Type Target_Dis
	setcycle 40 Type2 Target_Dis
	setcycle 40 Type3 Target
	setcycle 40 Audio chicks
	setcycle 40 Variant Traditional
	setcycle 40 Block Production5
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	setcycle 49 Stimulus picnic
	setcycle 49 PhoWord "p.I.k.n.I.k"
	setcycle 49 Olen 6
	setcycle 49 Plen 6
	setcycle 49 Freq 11.6863
	setcycle 49 OTAN 1
	setcycle 49 PTAN 1
	setcycle 49 Type Target_Dis
	setcycle 49 Type2 Target_Dis
	setcycle 49 Type3 Target
	setcycle 49 Audio picnic
	setcycle 49 Variant Traditional
	setcycle 49 Block Production5
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	setcycle 53 Stimulus slipped
	setcycle 53 PhoWord "s.l.I.p.t"
	setcycle 53 Olen 7
	setcycle 53 Plen 5
	setcycle 53 Freq 16.6275
	setcycle 53 OTAN 6
	setcycle 53 PTAN 9
	setcycle 53 Type Target_Dis
	setcycle 53 Type2 Target_Dis
	setcycle 53 Type3 Target
	setcycle 53 Audio slipped
	setcycle 53 Variant Traditional
	setcycle 53 Block Production5
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	setcycle 60 Stimulus acquit
	setcycle 60 PhoWord "5.k.w.I.t"
	setcycle 60 Olen 6
	setcycle 60 Plen 5
	setcycle 60 Freq 0.47059
	setcycle 60 OTAN 0
	setcycle 60 PTAN 2
	setcycle 60 Type Target_Fav
	setcycle 60 Type2 Target_Fav
	setcycle 60 Type3 Target
	setcycle 60 Audio acquit
	setcycle 60 Variant Traditional
	setcycle 60 Block Production5
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	run Production_seq

define sequence Production_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation_dot always
	run stim always
	run Record_Space always
	run ISI always
	run logger always

define inline_script Record_Space
	set description "Executes Python code"
	___run__
	
	import pyaudio
	import wave
	import sys
	import os
	from openexp.keyboard import keyboard
	
	# Name of sub-directory where WAVE files are placed
	current_experiment_path = self.get('experiment_path')
	subdir_recording = "/S%d/%s/" % (self.get('subject_nr'),self.get('Block'))
	newdir=current_experiment_path + subdir_recording
	#print('The directory Im having trouble with is...')
	#print(newdir)
	if not os.path.isdir(newdir):
		os.makedirs(newdir)
	
	# Variables for Pyaudio
	chunk = 1024
	format = pyaudio.paInt16
	channels = 1
	rate = 44100
	
	# Set variable for the labelling of the recorded WAVE file.
	wave_output_filename = "%s_%s_%s_%s_Num%d.wav" % (self.get('Stimulus'),self.get('Variant'),self.get('Type2'),self.get('Block'),self.get('count_stim'))
	
	#Audio recording stuff
	p = pyaudio.PyAudio()
	
	stream = p.open(format = format,
					channels = channels,
					rate = rate,
					input = True,
					frames_per_buffer = chunk)
	
	# Import keyboard and set accepted key
	recorder_keyboard = keyboard(exp, keylist=['space'])
	
	# Determine the timeout in ms
	timeout = 5000
	
	# Create an empty list for audio recording
	frames = []
	
	# Determine the timestamp of the start of the response interval
	start_time = self.time()
	current_time = self.time()
	
	# Record audio until space is pressed
	while (current_time - start_time) < timeout:
	
		# Record data audio data
		data = stream.read(chunk)
		# Add the data to a buffer (a list of chunks)
		frames.append(data)
	
		# Get new timestamp
		current_time = self.time()
	
		# Check if space key has been pressed
		key = recorder_keyboard.get_key(timeout=0)[0]
	
		# If space is pressed, advance to next part of the experiment
		if key == 'space':
			# Record data audio data
			data = stream.read(chunk)
			# Add the data to a buffer (a list of chunks)
			frames.append(data)
			break
	
	else:
		# Record data audio data
		data = stream.read(chunk)
		# Add the data to a buffer (a list of chunks)
		frames.append(data)
	
	# Close the audio recording stream
	stream.close()
	p.terminate()
	
	# write data to WAVE file
	wf = wave.open(current_experiment_path + subdir_recording + wave_output_filename, 'wb')
	wf.setnchannels(channels)
	wf.setsampwidth(p.get_sample_size(format))
	wf.setframerate(rate)
	wf.writeframes(''.join(frames))
	wf.close()
	__end__
	set _prepare ""

define loop Shuffler
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run ""

define sketchpad Welcome
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Thanks! <br /><br />Welcome to the experiment.<br />In this experiment, you will listen to a series of words <br />and then be recorded as you read a series of words aloud.<br /><br />The experiment will take approximately 40 minutes. You will get breaks periodically." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=320 z_index=0

define sketchpad Welcome_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Please make sure to put on headphones <br />and ensure that the microphone is positioned properly.<br /><br />The experimenter will assist you with this." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=320 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Consent_Form always
	run LHQ always
	run LHQ_2 always
	run Fav_Grouper always
	run Welcome always
	run Welcome_2 always
	run Intro_production always
	run space_response always
	run Baseline_production always
	run Intro_listening always
	run space_response always
	run Listening_1 always
	run Intro_production always
	run space_response always
	run Production_1 always
	run BREAK_block always
	run space_response always
	run Intro_listening always
	run space_response always
	run Listening_2 always
	run Intro_production always
	run space_response always
	run Production_2 always
	run BREAK_block always
	run space_response always
	run Intro_listening always
	run space_response always
	run Listening_3 always
	run Intro_production always
	run space_response always
	run Production_3 always
	run BREAK_block always
	run space_response always
	run Intro_listening always
	run space_response always
	run Listening_4 always
	run Intro_production always
	run space_response always
	run Production_4 always
	run BREAK_block always
	run space_response always
	run Intro_listening always
	run space_response always
	run Listening_5 always
	run Intro_production always
	run space_response always
	run Production_5 always
	run Conclusion always

define sketchpad fixation_dot
	set duration 200
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define keyboard_response space_response
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response SPACE
	set allowed_responses SPACE

define sketchpad stim
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=50 html=yes show_if=always text="[Stimulus]" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press the space bar after you've finished saying the word...<br />" x=0 y=320 z_index=0

define sketchpad stim_ISI
	set duration 500
	set description "Displays stimuli"

define sampler stim_audio
	set volume 1
	set stop_after 0
	set sample "[Audio].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad stim_listening
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=50 html=yes show_if=always text="[Stimulus]" x=0 y=0 z_index=0

